###################################################
# Resize world

d:Ge/World/HLX       = 0.6 m
d:Ge/World/HLY       = 0.6 m
d:Ge/World/HLZ       = 0.6 m

####################################################
#------------- Gantry coordinate system ------------

####################################################

# IEC_G: Gantry
s:Ge/IEC_G/Parent  = "World"
s:Ge/IEC_G/Type    = "Group"
d:Ge/IEC_G/RotX    = 0. deg
dc:Ge/IEC_G/RotY   = 0. deg  # Here !!!
d:Ge/IEC_G/RotZ    = 0. deg
d:Ge/IEC_G/TransX  = 0. m
d:Ge/IEC_G/TransY  = 0. m
d:Ge/IEC_G/TransZ  = 0. m

####################################################
#------------------- Spot holder -------------
# - Beam flies 0 to +z. Y rotation 180 deg
####################################################
s:Ge/SpotHolder/Type    = "Group"
s:Ge/SpotHolder/Parent  = "IEC_G"
#
d:Ge/SpotHolder/TransX  = 0.0 mm
d:Ge/SpotHolder/TransY  = 0.0 mm
dc:Ge/SpotHolder/TransZ  = 20.0 cm

#Rotate spot coordination
d:Ge/SpotHolder/RotX    = -180.0 deg
d:Ge/SpotHolder/RotY    = 0. deg
d:Ge/SpotHolder/RotZ    = 0. deg

####################################################
#----------------- Spot properties -----------------
# 
####################################################
#-- Type
s:So/Spot/Type           = "emittance"
s:So/Spot/Component		 = "SpotHolder"
s:So/Spot/BeamParticle	 = "proton"
s:So/Spot/Distribution   = "BiGaussian"

#-- Emittance spot
#-- X,Y position sampled out-of 4 will not be used
dc:So/Spot/SigmaX      = 2.0 mm
uc:So/Spot/SigmaXprime = 0.0
uc:So/Spot/CorrelationX = 0

dc:So/Spot/SigmaY      = 1.0 mm
uc:So/Spot/SigmaYprime = 0.0
uc:So/Spot/CorrelationY = 0

#-- Energy
d:So/Spot/BeamEnergy             = 100 MeV
u:So/Spot/BeamEnergySpread       = 0.1
i:So/Spot/NumberOfHistoriesInRun = 100

i:Ts/ShowHistoryCountAtInterval = 10
